/* Initiates simulation of coritcal column model with ICMS 
* Adapted from Markram et al., 2015 & Aberra et al., 2018
* 2020/06/16 Modified by Karthik Kumaravelu
* AUTHOR: Karthik Kumaravelu, Duke University
* CONTACT: karthik.kumaravelu@duke.edu
*/

// cell_id = 6 // leave unset until user selects cell

{load_file("nrngui.hoc")}
 {load_file("interpCoordinates.hoc")}
 {load_file("setPointers.hoc")}
// {load_file("calcVe.hoc")}
// {load_file("stimWaveform.hoc")}
{load_file("cellChooser.hoc")}

{load_file("setParams.hoc")}
{load_file("editMorphology.hoc")} // procs for editing cell morphology

// {load_file("rig.ses")}

// createPanels() // in setParams.hoc

celsius = 37 // default temp

setParamsAdultRat()
cell_chooser(cell_id) 

steps_per_ms = 40
dt = .025
secondorder = 0
tstop = 210

objref RLx
objref input_file1
RLx = new Vector() 		
input_file1 = new File()
input_file1.ropen("realx.dat") 
RLx.scanf(input_file1,6410)
input_file1.close()

objref RLy
objref input_file2
RLy = new Vector() 		
input_file2 = new File()
input_file2.ropen("realy.dat") 
RLy.scanf(input_file2,6410)
input_file2.close()

objref RLz
objref input_file3
RLz = new Vector() 		
input_file3 = new File()
input_file3.ropen("realz.dat") 
RLz.scanf(input_file3,6410)
input_file3.close()

objref RLang
objref input_file6
RLang = new Vector() 		
input_file6 = new File()
input_file6.ropen("realang.dat") 
RLang.scanf(input_file6,6410)
input_file6.close()

objref tot_cell_count
objref input_file7
tot_cell_count = new Vector() 		
input_file7 = new File()
input_file7.ropen("cell_cnt.dat") 
tot_cell_count.scanf(input_file7,25)
input_file7.close()

 
sigma_e = 2.76e-7 

DEL = 201 
DUR = 0.2 
AMP = -50
Space_Constant = 250 
FREQ = 2

ELECx1=200
ELECy1=1000
ELECz1=200

ELECx2=200
ELECy2=900
ELECz2=200

ELECx3=200
ELECy3=800
ELECz3=200

ELECx4=200
ELECy4=700
ELECz4=200

Space_Constant2 = 250
Space_Constant3 = 250
Space_Constant4 = 250

ampratio12_xtra=1 // Adjust if you would like electrode 2 to have a different amplitude than electrode 1
ampratio13_xtra=1 // Adjust if you would like electrode 3 to have a different amplitude than electrode 1
ampratio14_xtra=1 // Adjust if you would like electrode 4 to have a different amplitude than electrode 1


proc calcesI(){ local x0,y0,z0,sigma_e,r,ange
	x0 = $1 
	y0 = $2
	z0 = $3
	ange = $4
    sigma_e = $5 
	
			net_ad_x1=((x0*cos(ange))-(z0*sin(ange)))-(x0)
            net_ad_y1=(y0)-(y0)
            net_ad_z1=(((x0)*sin(ange))+((z0)*cos(ange)))-(z0)
	
	forall {
		if (ismembrane("xtra")){
			for(x,0){
			
			xrot1=((x0+x_xtra(x))*cos(ange))-((z0+z_xtra(x))*sin(ange))
	        yrot1=y0+y_xtra(x)
            zrot1=((x0+x_xtra(x))*sin(ange))+((z0+z_xtra(x))*cos(ange))
	
	        x_fin=xrot1-net_ad_x1
	        y_fin=yrot1-net_ad_y1
	        z_fin=zrot1-net_ad_z1
			
				r1w = sqrt(((x_fin-ELECx1)^2)+((y_fin-ELECy1)^2)+((z_fin-ELECz1)^2))
			    r2w = sqrt(((x_fin-ELECx2)^2)+((y_fin-ELECy2)^2)+((z_fin-ELECz2)^2))
				r3w = sqrt(((x_fin-ELECx2)^2)+((y_fin-ELECy2)^2)+((z_fin-ELECz2)^2))
				r4w = sqrt(((x_fin-ELECx2)^2)+((y_fin-ELECy2)^2)+((z_fin-ELECz2)^2))
				es1_xtra(x) = 1e-3/(4*PI*sigma_e*r1w) 
				es2_xtra(x) = 1e-3/(4*PI*sigma_e*r2w) 
				es3_xtra(x) = 1e-3/(4*PI*sigma_e*r3w) 
				es4_xtra(x) = 1e-3/(4*PI*sigma_e*r4w) 
				
			}
		}
	}		
}

objref stim_amp, stim_time
stim_amp = new Vector()
stim_time = new Vector()

proc stim_waveform() {
  // this uses interpolated play
  // index    0  1    2    3        4        5          
  // stim vec 0, 0,   1,   1,       0        0          
  // time vec 0, DEL, DEL, DEL+DUR, DEL+DUR, DEL+DUR+1
  //  really  0, $1,  $1,  $1+$2,   $1+$2,   $1+$2+1
  // first the stim vector
  
  stim_amp.resize(10*10)
  
  stim_amp.fill(0)
  
   for itc1=0,9{
  
  stim_amp.x[2+(10*itc1)]=1
  stim_amp.x[3+(10*itc1)]=1 
  stim_amp.x[6+(10*itc1)]=-1  
  stim_amp.x[7+(10*itc1)]=-1
 
  }
  
  stim_amp.mul($3)

  stim_time.resize(10*10)
  
  for itc=0,9{
  
  stim_time.x[1+(10*itc)]=$1+((1000/$4)*itc)
  stim_time.x[2+(10*itc)]=$1+((1000/$4)*itc)
  stim_time.x[3+(10*itc)]=$1+$2+((1000/$4)*itc)
  stim_time.x[4+(10*itc)]=$1+$2+((1000/$4)*itc)
  stim_time.x[5+(10*itc)]=$1+$2+0.053+((1000/$4)*itc)
  stim_time.x[6+(10*itc)]=$1+$2+0.053+((1000/$4)*itc)
  stim_time.x[7+(10*itc)]=$1+$2+0.053+$2+((1000/$4)*itc)
  stim_time.x[8+(10*itc)]=$1+$2+0.053+$2+((1000/$4)*itc)
  stim_time.x[9+(10*itc)]=$1+$2+0.053+$2+1+((1000/$4)*itc)
  
  }

}


proc attach_stim() {
  forall {  
      if (ismembrane("xtra")) {
        stim_amp.play(&stim_xtra, stim_time, 1) 
      }
	  }
	  }

proc setstim() {
  del = $1
  dur = $2
  amp = $3
  freq = $4
  stim_waveform(del, dur, amp, freq)
  attach_stim()
}

objref tvec
double vm_soma[1]

tvec = new Vector()

objref vm[1]
vm[0] = new Vector()

objref fihprog_

	objref myout
    objref myout1


proc recvm(){
	
	if (t>=200){
	
	vm_soma=cell.soma[0].v(0.5)
	tvec.append(t)
	vm.append(vm_soma)
	
	}
	
    cvode.event(t+dt, "recvm()")
}
	
	
	tot_nseg=0

forsec Myelin_secList {
tot_nseg=tot_nseg+nseg
}

forsec Node_secList {
tot_nseg=tot_nseg+nseg
}

forsec Unmyelin_secList {
tot_nseg=tot_nseg+nseg
}


objref efmm[1]
for i=0, 0{
efmm[i] = new Matrix(400,tot_nseg+1)}
	
proc rec_vm_axon(){

	if (t>=200){
	
	efmm[0].x[(t-200)/dt][0] = t
    
	cnt=1
	
	kpo=0
	forsec Myelin_secList {
	for j=1,nseg{
	abc=1/(nseg+1)
	efmm[0].x[(t-200)/dt][cnt] = Myelin[kpo].v(j*abc)
	cnt=cnt+1
	}
	kpo=kpo+1
	}	
	
	kpo=0
	forsec Node_secList {
	for j=1,nseg{
	abc=1/(nseg+1)
	efmm[0].x[(t-200)/dt][cnt] = Node[kpo].v(j*abc)
	cnt=cnt+1
	}
		kpo=kpo+1
	}
	
	kpo=0
	forsec Unmyelin_secList {
	for j=1,nseg{
	abc=1/(nseg+1)
	efmm[0].x[(t-200)/dt][cnt] = Unmyelin[kpo].v(j*abc)
	cnt=cnt+1
	}
		kpo=kpo+1
	}
	
	
	}
	
	cvode.event(t+dt, "rec_vm_axon()")
}

proc progress() {
    n_run1=$1
	print "t=",t
	 strdef d,data1,data_n1,dar
        d =".dat"
        data1 = "Vm_"
		dar = "_"

    sprint(data_n1,"%s%d%s%d%s",data1,cell_id,dar,n_run1,d)
	strdef spkflnm1
    sprint(spkflnm1, data_n1)
	myout = new File()

    	if (t>=200){

	if (t == 200){
		myout.wopen(spkflnm1)
	} else {
  myout.aopen(spkflnm1)
  } 
    for i=0, tvec.size-1 {
       myout.printf("%g %g\n", tvec.x[i], vm.x[i])	
    	}
    	myout.close()     
	vm.resize(0)
	tvec.resize(0) 
	
	}
	
	
	strdef data2,data_n2
    data2 = "Vm_axon_"
    sprint(data_n2,"%s%d%s%d%s",data2,cell_id,dar,n_run1,d)

	myout1 = new File()
	
	if (t>=200){

	myout1.wopen(data_n2)
	
	for i=0, 399{
	for j=0, tot_nseg{
       myout1.printf("%g\t", efmm[0].x[i][j])	
    	}
       myout1.printf("\n")			
		}
		}

		
	  if (t == 0) {
	recvm()
	rec_vm_axon()}    	
	cvode.event(t+10, "progress(n_run1)")
}


proc run_all(){
        n_run1=$1
	    calcesI(RLx.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],RLy.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],RLz.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],RLang.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],sigma_e)
        setstim(DEL,DUR,AMP,FREQ)
		
		sprint(cell_dir,"cells/%s",cell_names.o(cell_id-1).s)
        chdir(cell_dir)
		cell.synapses.load_synapses(cell,RLx.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],RLy.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],RLz.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],RLang.x[tot_cell_count.sum(0,cell_id-1)-tot_cell_count.x[cell_id-1]+n_run1-1],ELECx1,ELECy1,ELECz1,Space_Constant,ELECx2,ELECy2,ELECz2,Space_Constant2, ELECx3, ELECy3, ELECz3, Space_Constant3, ELECx4, ELECy4, ELECz4, Space_Constant4)
		chdir(current_dir)
		
	    cell.synapses.reset_synapses()
	    cell.synapses.update_synapses()


 {fihprog_ = new FInitializeHandler("progress(n_run1)")}
run()
}

objref pc
pc = new ParallelContext()
{pc.runworker()}

proc batchrun() {

	for md_inst1 = 1, tot_cell_count.x[cell_id-1] {
						pc.submit("run_all",md_inst1)
}
	while (pc.working()) {
	}
	
}
batchrun()